OpenViBE-Scenario

CSV File Reader
  Filename = C:/Users/Pjotrik/Desktop/openvibe DSP/18.9.2015/filename.csv
  Column separator = ,
  Don't use the file time = true
  Samples per buffer = 32
-> Time based epoching
  Epoch 1 duration (in sec) = 2
  Epoch 1 intervals (in sec) = 0.5
-> Matlab Scripting => #2
  Box clock frequency in Hz = 2
  Matlab executable (path) = C:/MATLAB/bin/win32/MATLAB.exe
  Matlab working directory = ${Player_ScenarioDirectory}
  Initialize function = matlab_Initialize
  Process function = matlab_Process
  Uninitialize function = matlab_Uninitialize
#2.RoboArm commands -> RoboArm
  Robo arm connected = false
  Movement speed <1-100> = 50
  Top Angle <0-90> = 60
  Bottom Angle <0-90> = 60
#2.Beep stimulations -> Sound Player
  PLAY trigger = OVTK_StimulationId_Beep
  STOP trigger = OVTK_StimulationId_Label_01
  File to play = ${Path_Data}/plugins/stimulation/ov_beep.wav
  Loop = false
Data=#2.Processed signal -> 0xc67a01dc Signal display
  Display Mode = Scroll
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 20
  Vertical Offset = 13
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
